PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 800]
  color = -1.0000, -1.0000, -1.0000
  expName = Keys
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine EEGtrial
    ButtonComponent Prep
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      callback = expInfo['PrepTime']=core.getAbsTime()
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, 0.6)
      size = [1,0.1]
      startVal [time (s)] = 0
      text = Prep
      timeRelativeTo = experiment
      units = norm
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    ButtonComponent Stance
      bold = True
      borderColor = black
      callback = expInfo['StanceTime']=core.getAbsTime()
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = [1,0.1]
      startVal [time (s)] = 0
      text = Stance
      timeRelativeTo = experiment
      units = norm
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    ButtonComponent Swing
      bold = True
      borderColor = black
      callback = expInfo['SwingTime']=core.getAbsTime()
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0,0.2)
      size = [1,0.1]
      startVal [time (s)] = 0
      text = Swing
      timeRelativeTo = experiment
      units = norm
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    ButtonComponent Hit
      bold = True
      borderColor = green
      callback = expInfo['EvType']='Hit'
      fillColor = green
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = [1,0.1]
      startVal [time (s)] = 0
      text = Hit
      timeRelativeTo = experiment
      units = norm
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    ButtonComponent Miss
      bold = True
      borderColor = red
      callback = expInfo['EvType']='Miss'
      fillColor = red
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = [1,0.1]
      startVal [time (s)] = 0
      text = Miss
      timeRelativeTo = experiment
      units = norm
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    ButtonComponent End
      bold = True
      borderColor = black
      callback = endExpNow = True
      fillColor = 0.0039, 0.0039, 0.0039
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0,-0.5)
      size = [1,0.1]
      startVal [time (s)] = 0
      text = End
      timeRelativeTo = experiment
      units = norm
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  Routine addCode
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import time
        from datetime import datetime
Flow
  LoopInitiator tr_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 40
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    Routine EEGtrial
  LoopTerminator tr_loop
